PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'Age': '', 'Gender(M/F/N)': '', 'Dominant Eye(L/R)': '', 'Handedness(L/R)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = ContrastSen
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Intro
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    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the corresponding arrow key to the arrow shown on screen.

        Please cover your Right eye.

        Press any button to begin
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Right
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    CodeComponent Code2
      Code Type = Auto->JS
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      Begin Experiment:
        Ori = 0
      Begin Routine:
        import random

        List = ("left", "right", "up", "down")
        randnum = random.randint(0,3)
        corr_resp=List[randnum]
        if corr_resp == "left":
            Ori = 270
        elif corr_resp == "right":
            Ori = 90
        elif corr_resp == "up":
            Ori = 0
        elif corr_resp == "down":
            Ori = 180
      End Routine:
        REBaseCont = level
    PolygonComponent Arrow2
      contrast [set every repeat] = level
      fillColor = white
      ori [set every repeat] = Ori
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent Key_Resp2
      allowedKeys = 'left', 'right', 'up', 'down'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Left
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        Ori = 0
      Begin Routine:
        import random
        List = ("left", "right", "up", "down")
        randnum = random.randint(0,3)
        corr_resp=List[randnum]
        if corr_resp == "left":
            Ori = 270
        elif corr_resp == "right":
            Ori = 90
        elif corr_resp == "up":
            Ori = 0
        elif corr_resp == "down":
            Ori = 180
      End Routine:
        LEBaseCont = level
    PolygonComponent Arrow
      contrast [set every repeat] = level
      fillColor = white
      ori [set every repeat] = Ori
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right', 'up', 'down'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Pre_SecondBlock
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Change_eye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the corresponding arrow key to the arrow shown on screen.

        Please cover your Left eye.

        Press any button to begin
  Routine End
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Experiment:
        import csv

        if REBaseCont > LEBaseCont:
            EyeRatio = LEBaseCont / REBaseCont
            REExpCont = 1
            LEExpCont = EyeRatio
        else:
            EyeRatio = REBaseCont / LEBaseCont
            LEExpCont = 1
            REExpCont = EyeRatio

        Name = expInfo['participant']
        with open(f'{Name}.csv', 'w', newline='') as csvFile:
            Writer = csv.writer(csvFile, delimiter=',',
                                quotechar='|', quoting=csv.QUOTE_MINIMAL)
            Writer.writerow(['PartInitials', 'Age', 'Gender', 'DominantEye',
                            'Handedness', 'LEContrast', 'REContrast', 'EyeContrastRatio',
                            'LEExpContrast', 'REExpContrast'])
            Writer.writerow([Name, expInfo['participant'], expInfo['Age'], expInfo['Gender(M/F/N)'],
                            expInfo['Dominant Eye(L/R)'], expInfo['Handedness(L/R)'],
                            LEBaseCont, REBaseCont, EyeRatio, LEExpCont, REExpCont])
Flow
  Routine Intro
  LoopInitiator StairLoop loopType="StairHandler"
    N down = 3
    N reversals = 10
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 50
    start value = 1
    step sizes = [0.6,0.4,0.4,0.2,0.1,0.05]
    step type = log
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    Routine Left
  LoopTerminator StairLoop
  Routine Pre_SecondBlock
  LoopInitiator StairLoop2 loopType="StairHandler"
    N down = 3
    N reversals = 10
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 50
    start value = 1
    step sizes = [0.6,0.4,0.4,0.2,0.1,0.05]
    step type = log
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    Routine Right
  LoopTerminator StairLoop2
  Routine End
